;QUESP: apply a saturation of increasing power to study exchange
;see e.g. https://www.sciencedirect.com/science/article/pii/S0079656520300212
; POWER list: start with line "Watt" (with no quotation mark). Then add powers in Watt

;To calculate powers:
;cnst53 = (1/(4*p1(µs)))*1000000 in Hz
;plw9=plw1*10^(2*log10(cnst52/cnst53))
;check power using "pulse" command


;$CLASS=tk506
;$DIM=pseudo 2D
;$TYPE=Exchange
;$SUBTYPE=
;$COMMENT=14/10/23


#include <Avance.incl>

"d12=20u"

"acqt0=-p1*2/3.1416"
"d11 = 30m"

define list <power> power_list=<$VALIST>

1 zd
2 30m
  d12 power_list:f1 
  10u fq=cnst1:f1
  d1 cw:f1 ph29 
  4u do:f1
  10u fq=0:f1
  d12 pl1:f1 
  p1 ph1
  go=2 ph31

  d11 wr #0 if #0 power_list.inc
  lo to 1 times td1
HaltAcqu, 1m
exit


ph1=0 2 2 0 1 3 3 1
ph29=0
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;ns: 1 * n, total number of scans: NS * TD0
;cnst1: frequency offset (negative = right, positive = left)


;$Id:$
