;zgpr, but with an offset from carrier frequency.
; Made So that the spectrum center and saturation frequency to be chosen independently (helpful to compare spectra)
;
;$CLASS=tk506
;$DIM=1D
;$TYPE=Exchange
;$SUBTYPE=
;$COMMENT=

#include <Avance.incl>


"d12=20u"


"acqt0=-p1*2/3.1416"


1 ze
2 30m
  d12 pl9:f1
1u fq=cnst1:f1
  d1 cw:f1 ph29
  4u do:f1
1u fq=0:f1
  d12 pl1:f1
  p1 ph1
  go=2 ph31
  30m mc #0 to 2 F0(zd)
exit


ph1=0 2 2 0 1 3 3 1
ph29=0
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;ns: 1 * n, total number of scans: NS * TD0
;cnst1: saturation offset (positive = saturation on left of carrier frequency)


;$Id:$
