;cpmg_T2_1d
;added phase cycling
;avance-version (17/03/20)
;for fast T2 (single scan + averaging)
;
;$CLASS=tk506
;$DIM=1D
;$TYPE=Relaxometry
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Delay.incl>
#include <De.incl>



define loopcounter lcount1
define loopcounter lcount2
define loopcounter td_val

define delay acquisitiontime

"p2=p1*2"
"d12=20u"

"acquisitiontime = d20*2*l20"


"if ( de > 20u ) { DELTA = 20u; } else { DELTA = de; }"

"DELTA1=d20-p2/2-p1*2/PI-DELTA-de-0.25u"
"DELTA2=d20-p2/2-dw-DELTA-0.15u"
"DELTA3=d20-p2/2-dw-DELTA-0.1u"

"TAU1=dw-0.05u"
"TAU2=dw"


"lcount1=l20-1"
"lcount2=grpdly"
"td_val=(l20+grpdly)*2"


start, 1u
lo to start times td_val
acquisitiontime
1 ze
  d12 pl1:f1

2 30m
  20u ip30+cnst30
  d1
  (p1 ph1)
  ACQ_START(ph30,ph31)
  0.05u DWELL_HOLD
  0.1u START_NEXT_SCAN

  DELTA1
  0.1u REC_BLK
  DELTA
  (p2 ph2):f1
  DELTA
  0.1u REC_UNBLK
  DELTA3
  0.05u DWELL_RELEASE
  TAU1

  TAU2
  0.05u DWELL_HOLD

4 DELTA2
  0.1u REC_BLK
  DELTA
  (p2 ph2):f1
  DELTA
  0.1u REC_UNBLK
  DELTA3
  0.05u DWELL_RELEASE
  TAU1

  TAU2
  0.05u DWELL_HOLD
  lo to 4 times lcount1

5 DELTA2
  0.1u REC_BLK
  DELTA
  TAU
  DELTA
  0.1u REC_UNBLK
  DELTA3
  0.05u DWELL_RELEASE
  TAU1

  TAU2
  0.05u DWELL_HOLD
  lo to 5 times lcount2

  0.1u REC_BLK
  0.05u DWELL_RELEASE
  rcyc = 2

  wr #0
exit


;ph1=0 1 2 3
;ph2=1 2 3 0
;ph30=0 1 2 3
;ph31=0  1 2 3

ph1=0 2 1 3  2 0 3 1
ph2=1 3 2 0 1 3 2 0   3 1 0 2 3 1 0 2
ph30=0 ;2 1 3
ph31=0 2 1 3  2 0 3 1

;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;d20: fixed echo time to allow elimination of J-mod. effects
;        d20 should be << 1/J ,but > (50 * p2)       [1-2 msec]
;cnst30: additional receiver phase setting to have intensity in real channel
;l20: number of echos
;ns: 1 * n, total number of scans: NS * TD0
;td: number of echos



;$Id:$
