;zgesgp2d
;time-resolved water suppression using excitation sculpting with gradients
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;
;$CLASS=tk506
;$DIM=pseudo 2D
;$TYPE=In Situ
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d12=20u"
"DELTA=d20-((30m+d12+d1+p1+p16+p12+d12+p2+p16+d16+TAU+2*d16+p12+d12+p2+p16+d16+aq)*(ns+ds))"

"TAU=de+p1*2/3.1416+50u"
"acqt0=0"
baseopt_echo

1 ze
2 DELTA
3 30m
  d12 pl1:f1 BLKGRAD
  d1
  p1 ph1
  
  50u UNBLKGRAD
  p16:gp1
  d16 pl0:f1
  (p12:sp1 ph2:r):f1
  4u
  d12 pl1:f1

  p2 ph3

  4u
  p16:gp1
  d16 
  TAU
  p16:gp2
  d16 pl0:f1
  (p12:sp1 ph4:r):f1
  4u
  d12 pl1:f1

  p2 ph5

  4u
  p16:gp2
  d16

  go=3 ph31
  30m wr #0 if #0 ze
  lo to 2 times td1
  4u BLKGRAD
exit


ph1=0
ph2=0 1
ph3=2 3
ph4=0 0 1 1
ph5=2 2 3 3
ph31=0 2 2 0 


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                             [20 usec]
;d16: delay for homospoil/gradient recovery
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4
;d20: delay between start of different 1D spectra
;DELTA: time-resolution
;TD(F1): number of spectra


;use gradient ratio:    gp 1 : gp 2
;                         31 :   11

;for z-only gradients:
;gpz1: 31%
;gpz2: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
