; cpspindiff then REDOR to filter the final magnetisation according to dipolar interactions, e.g. with 31P or 15N
; REDOR filter after mixing time -> 13C magnetisation near nucleus of interest (e.g. 31P, 15N) is dephased, resulting in a weaker peak intensity.
; More selectivite than cpredorSPINDIFF.tk506. But don't expext a symmetric spectrum (?)
;
;basic 2D homonuclear exchange experiment
;written by HF and JOS 
;updated JOS 6/24/2011
;checked by JOS 24/6/2011
;
;General Comment
;2D exchange NMR in rotating solids using PDSD mixing (PL14=120db) 
;or DARR/RAD mixing with pl14 set such that the RF field is n*spin rate, n=1-3
;rotor synchronized, set cnst31=spin rate in Hz
;rotor synchronize in F1 choose n*spin rate for SWH in F1
;DARR Dipolar assisted rotational resonance (K. Takegoshi et al Chem. Phys. Lett. 2001, 344, 631.
;RAD (RF assisted diffusion) C.R. Morcombe et al., JACS 2004, 126, 7196.
;
;requires modification to run under TS2.1 inquire with applications
;
;Avance III version
;parameters:
;d1 : recycle delay
;p1 : X 90 degree pulse
;p3 : H 90 degree pulse
;p15 : contact time at plw1 (rf-channel f1) and spw0 (rf-channel f2)
;pl11 : rf-power on X for 90 degree pulses
;pl12 : rf-power for 1H pi/2 pulse p3 and standard proton decoupling
;pl13 : e.g. used in tppm13
;pl14 : rf-power for RAD-DARR mixing pulse, calculate or measure B1 field = 1 * rotation rate
;cnst31 : spinning rate in Hz
;d8 : mixing time,recalculated for multiple rotor period, max. 500 msec
;sp0 : rf-power for contact pulse of 1H channel (rf-channel f2)
;spnam0 : file name for shaped CP pulse
;cpdprg2 : 1H decoupling sequence (spinal64, tppm15, cw, etc.)
;FnMODE: TPPI, States-TPPI or STATES
;ns : 16*n
;SWH[F1]: integer multiple of rotor frequency
;zgoptns: -Dlacq, -Dlcp15, or blank

; REDOR
;l0 : =1, must be odd for rotor sync
;pl3 : F3 (15N/31P) power level (180)
;p12 : F3 (15N/31P) 180 degree pulse
;
;$CLASS=tk506
;$DIM=2D
;$TYPE=cross polarisation
;$SUBTYPE=homonuclear correlation
;$COMMENT=
;prosol relations=<solids_cp>


#include <Avance.incl>
#include <trigg.incl>


"cnst59=plw14"
"d31=1s/cnst31"

define pulse mixing 
define delay darrmix
define loopcounter count
define loopcounter darr
"darr=d8/d31"							/*setup for rotor synchronized mixing time */
"mixing=(darr*d31)"
"l1=0"										/* house keeping for detection in t1, start at t1=0 for flat baseline */
"in0=inf1"
"d0=1u"
"acqt0=-p1/2"
"darrmix=mixing"


; REDOR
define delay del25		;calculate sync. delays
"del25=(0.25s/cnst31)-(p1/2)"
define delay del26
"del26=(0.25s/cnst31)-(p12/2)"
define delay del27
"del27=(0.25s/cnst31)-(p2/2)"
define delay del28
"del28=(0.25s/cnst31)-de"


1 ze
#include <rot_prot.incl>
#ifndef lcp15
#include <p15_prot.incl>
			;make sure p15 does not exceed 10 msec 
			;let supervisor change this pulseprogram if 
			;more is needed
#endif
#ifndef lacq		
			;disable protection file for long acquisition change decoupling power !!! or you risk probe damage
			;if you set the label lacq (ZGOPTNS -Dlacq), the protection is disabled

#include <aq_prot.incl>	
			;allows max. 50 msec acquisition time, supervisor
			;may change  to max. 1s at less than 5 % duty cycle
			;and reduced decoupling field
#endif
#include <darrmix2_prot.incl>    /*allows max. 500 msec mixing time for PDSD, 100m for DARR*/
  darrmix
  d31
2 10m do:f2
  d1
  1u fq=cnst21:f2
  10u pl12:f2 pl1:f1    ;preselect pl2 drive power for F2
  trigg
  p3:f2 ph1             ;proton 90 pulse
  (p15 ph2):f1 (p15:sp0 ph10):f2        ;contact pulse
  if "l1==1"{
    "d0=in0"
    }
  if "l1>0"
    {  		;use cpdprg2=tppm15, SPINAL64 or XiX
    d0 cpds2:f2
  }
  (p1 pl11 ph3):f1 (1u do):f2
  (mixing pl14 ph11):f2
  ;(p1 ph5):f1 (1u cpds2):f2

  ;; REDOR
  2u rpp9
  2u rpp8
  (p1 pl11 ph12):f1
  del25  cpds2:f2
3 del26 
  (p12 pl3 ph8^):f3
  del26
  lo to 3 times l0
  del27
  (p2  ph15):f1	
  del27
4 del26
  (p12 ph9^):f3	
  del26
  lo to 4 times l0
  del28
  go=2 ph31
  1m do:f2
  10m mc #0 to 2 F1PH(ip2,id0 & iu1)
 
HaltAcqu, 1m
6 exit

ph1=1 3
ph2=1
ph3={0}*8 {2}*8
ph10=0
ph11=0
ph12= 0 2 2 0  1 3 3 1   0 2 2 0   1 3 3 1
ph15= 0 0 0 0  0 0 0 0   2 2 2 2   2 2 2 2
ph31= 0 0 2 2  3 3 1 1   2 2 0 0   1 1 3 3
ph8= 0 1 0 1 1 0 1 0
ph9= 0 1 0 1 1 0 1 0

;$Id:$
